PsychoPy2experiment version="1.80.03"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1000, 700]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u'demo'}
  Show info dlg = False
  expName = ratingScale
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    RatingScaleComponent rating
      high = 4
      startVal [time (s)] = 0.4
      size = 1.2
      forceEndRoutine = True
      low = 1
      scaleDescription = 1=not much ... 4=great
      singleClick = True
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    TextComponent stimulus_to_rate
      text [set every repeat] = $thing
      pos = [0, 0.35]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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  Routine feedback
    CodeComponent code
      Begin Routine:
        # uses data from `rating` obtained on the previous routine:
        result = "You pressed " + str(rating.getRating())
        if rating.getRT() < 1:
            result += ', quickly.'
        else:
            result += ', slowly.'
    TextComponent text
      text [set every repeat] = $result
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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  Routine instr
    TextComponent text_2
      wrapWidth = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This demo will show a rating scale for each of four things-to-be-rated, and then show the rating.

        Hit any key to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.pkl
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thing': u'thing-1'},
      {'thing': u'thing-2'}]
    Routine trial
  LoopTerminator trials
